% iAMPACOBA: scaled excitatory AMPA synaptic current from (Brette et al.,
% 2007), adapted threshold for COBA benchmark
%
% Reference:
% - Brette R, Rudolph M, Carnevale T, Hines M, Beeman D, Bower JM, et al.
% Simulation of networks of spiking neurons: A review of tools and strategies.
% Journal of Computational Neuroscience 2007;23:349–98.
% doi:10.1007/s10827-007-0038-6.
%
% parameters
% conductance conversion:
%   6 nS * 10^-6 (nS->mS) / (20000 um^2 * 10^8 (um^2->cm^2)) = 0.03 mS/cm^2
gAMPA = (0.03/10)
EAMPA = 60
tauAMPA = 5
IC = 0.1; IC_noise = 0
prob_cxn = 0.02

% fixed variables
netcon = rand(N_pre,N_post)<=prob_cxn

% functions
IAMPACOBA(X,s) = gAMPA/N_pre.*(sAMPA*netcon).*(X-EAMPA)

% ODEs and ICs
sAMPA' = -sAMPA./tauAMPA
sAMPA(0) = IC+IC_noise.*rand(1,N_pre)
% Lazy spike detection here, see Issue 133 https://github.com/DynaSim/DynaSim/issues/133
if(X_pre>9.99)(sAMPA=1)

monitor functions % always record the synaptic current

% linkers
@current += -IAMPACOBA(X_post,sAMPA)
